---
API: 2
OpenSesame: 3.0.6
Platform: nt
---
set width 1290
set uniform_coordinates "yes"
set title "PyGaze eye-tracking template"
set subject_parity "even"
set subject_nr 0
set start "main_experimental_sequence"
set sampler_backend "legacy"
set mouse_backend "psycho"
set keyboard_backend "psycho"
set height 1080
set foreground "#000000"
set font_size 18
set font_italic "no"
set font_family "mono"
set font_bold "no"
set experiment_path "C:\Users\id121943\OneDrive - Birmingham City University\Current\FoodAttnProject"
set description "A template for eye-tracking experiments"
set coordinates "relative"
set compensation 0
set color_backend "psycho"
set clock_backend "psycho"
set canvas_backend "psycho"
set bidi "yes"
set background "#ffffff"

define notepad about_this_experiment
	__note__
	This experiment was programmed by Neale Samways, neale.samways@bcu.ac.uk.
	
	Note that the food_target trials and object_target trials are counterbalanced according to participant number;  odd numbered participants complete the food_target trials first, whereas the even numbered participants complete the object_target trials first.
	
	
	Conditions:
	
	"condition"	"Target" "Distractor" "target	position"	"number of trials"	
	1	HF	N	L	30	
	2	HF	N	R	30	
	3	UF	N	L	30	
	4	UF	N	R	30	
						
	5	N	HF	L	30	
	6	N	HF	R	30	
	7	N	UF	L	30	
	8	N	UF	R	30	
						
				Total:	240	
						
		HF = healthy food				
		UF = unhealthy food				
		N = neutral object
	__end__
	set description "Some pointers to help you gest started!"

define keyboard_response continue
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Waits for a SPACE bar response before continuing"
	set allowed_responses "SPACE"

define sketchpad end_of_experiment_instructions
	set start_response_interval "no"
	set duration "keypress"
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to exit" x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Thank you!<br />" x=0 y=-192 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="That is the end of the experiment." x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval "no"
	set duration 0
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue" x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="This is the end of the practice trials.<br />If you have any questions, please ask the experimenter." x=32 y=-192 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Remember to press the <b>Q</b> key if the target is on the left, and the <b>P</b> key if the target is on the right.<br /><br />Place your fingers on the keyboard, so that you are ready." x=64 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="When you are ready to begin the main trials, press the <b>SPACE</b> bar" x=0 y=0 z_index=0

define sketchpad experimental_instructions_food_first
	set start_response_interval "no"
	set duration 0
	set description "Initial instructions"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="When you are ready to begin, press the <b>SPACE</b> bar" x=0 y=160 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructions x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="At the start of each trial, a black cross will appear in the centre of the screen. Please focus on this cross when it appears. <br /><br />After a short while, two images will appear on either side of the cross.<br />Your task is to identify whether the target, the <b>FOOD</b> item is on the left of the right of the screen.<br /><br />If the <b>FOOD</b> item was presented on the left, please press the <b>Q</b> key.  If the target image was on the right, press the <b>P</b> key.<br /><br />Please try to respond as quickly but accurately as you can.  You will only have a short duration in which to respond before the next trial begins. <br />If you do not respond before the start of the next trial, just continue with the next trial.<br /><br /><br /><br />You will start with some practice trials. Please place your fingers on the <b>Q</b> and <b>P</b> keys." x=0 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="" x=288 y=128 z_index=0

define sketchpad experimental_instructions_object_first
	set start_response_interval "no"
	set duration 0
	set description "Initial instructions"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="When you are ready to begin, press the <b>SPACE</b> bar" x=0 y=160 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructions x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="At the start of each trial, a black cross will appear in the centre of the screen. Please focus on this cross when it appears. <br /><br />After a short while, two images will appear on either side of the cross.<br />Your task is to identify whether the target, the <b>NON-FOOD</b> item is on the left of the right of the screen.<br /><br />If the <b>NON-FOOD</b> item was presented on the left, please press the <b>Q</b> key.  If the target image was on the right, press the <b>P</b> key.<br /><br />Please try to respond as quickly but accurately as you can.  You will only have a short duration in which to respond before the next trial begins. <br />If you do not respond before the start of the next trial, just continue with the next trial.<br /><br /><br /><br />You will start with some practice trials. Please place your fingers on the <b>Q</b> and <b>P</b> keys." x=0 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="" x=288 y=128 z_index=0

define sketchpad eye_tracker_instructions
	set start_response_interval "no"
	set duration 0
	set description "Initial instructions"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="When you are ready to begin, press the <b>SPACE</b> bar" x=0 y=160 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Welcome!" x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="This experiment involves tracking your eye movement using an eye tracker.<br />Before the experimental trials begin, the eye tracker must be calibrated.<br />During this period, a hollow green circle will appear, with a black dot at the centre, <br />then change positions on the screen and decrease in size.<br /><br />Please try to keep your head still, and focus on the dot in the circle as it changes size.<br />When this has been completed, the experimenter will choose to accept or re-do the calibration.<br />After this there will be two similar tasks to validate the calibration in which a small black dot will appear.<br />Please focus on the dot during this period.<br /><br />After pressing the space bar to move to the next screen, you will need to press the space bar <b>once</b> when<br />you are focussing on the green circle in the centre of the screen.<br /><br />Please ask the experimenter if you have any questions." x=0 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="" x=288 y=128 z_index=0

define fixation_dot fixation_cross
	set y 0
	set x 0
	set style "large-cross"
	set penwidth 1
	set foreground "#000000"
	set duration 650
	set description "Presents a central fixation dot with a choice of various styles"
	set background "#ffffff"

define sketchpad food_next_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Thank you!" x=0 y=-288 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You have completed the first part of the experiment.<br /><br />In the second part of the experiment, the task is the same, however:<br />you must now identify which side the <b>FOOD</b> image is on.<br /><br />Again, please press the <b>Q</b> key if it is on the left, or<br />press the <b>P</b> key if it is on the right.<br /><br />You will not have any practice trials for this part.<br /><br />Please have a rest now if you need one.<br /><br />When you are ready to begin, place your hands on the <b>Q</b> and <b>P</b> keys<br />and press the <b>space</b> bar." x=0 y=0 z_index=0

define sequence food_target_first_block
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run experimental_instructions_food_first always
	run continue always
	run practice_trials_food always
	run end_of_practice always
	run continue always
	run main_trials_food always
	run object_next_instructions always
	run continue always
	run main_trials_object always

define loop food_target_first_condition
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "food_target_first_block"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run food_target_first_block

define sequence food_target_main_block
	set flush_keyboard "yes"
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run food_target_main_trial_loop always

define loop food_target_main_trial_loop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "trial_sequence"
	set description "A single block of trials"
	set cycles 120
	set column_order "itemPosition;target;correctAnswer;lImage;rImage;condition"
	set break_if "never"
	setcycle 0 target "food"
	setcycle 0 itemPosition "1"
	setcycle 0 lImage "FH1.JPG"
	setcycle 0 correctAnswer "q"
	setcycle 0 condition "1"
	setcycle 0 rImage "OB1.JPG"
	setcycle 1 target "food"
	setcycle 1 itemPosition "2"
	setcycle 1 lImage "FH2.JPG"
	setcycle 1 correctAnswer "q"
	setcycle 1 condition "1"
	setcycle 1 rImage "OB2.JPG"
	setcycle 2 target "food"
	setcycle 2 itemPosition "3"
	setcycle 2 lImage "FH3.JPG"
	setcycle 2 correctAnswer "q"
	setcycle 2 condition "1"
	setcycle 2 rImage "OB3.JPG"
	setcycle 3 target "food"
	setcycle 3 itemPosition "4"
	setcycle 3 lImage "FH4.JPG"
	setcycle 3 correctAnswer "q"
	setcycle 3 condition "1"
	setcycle 3 rImage "OB4.JPG"
	setcycle 4 target "food"
	setcycle 4 itemPosition "5"
	setcycle 4 lImage "FH5.JPG"
	setcycle 4 correctAnswer "q"
	setcycle 4 condition "1"
	setcycle 4 rImage "OB5.JPG"
	setcycle 5 target "food"
	setcycle 5 itemPosition "6"
	setcycle 5 lImage "FH6.JPG"
	setcycle 5 correctAnswer "q"
	setcycle 5 condition "1"
	setcycle 5 rImage "OB6.JPG"
	setcycle 6 target "food"
	setcycle 6 itemPosition "7"
	setcycle 6 lImage "FH7.JPG"
	setcycle 6 correctAnswer "q"
	setcycle 6 condition "1"
	setcycle 6 rImage "OB7.JPG"
	setcycle 7 target "food"
	setcycle 7 itemPosition "8"
	setcycle 7 lImage "FH8.JPG"
	setcycle 7 correctAnswer "q"
	setcycle 7 condition "1"
	setcycle 7 rImage "OB8.JPG"
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	setcycle 30 target "food"
	setcycle 30 itemPosition "31"
	setcycle 30 lImage "OB31.JPG"
	setcycle 30 correctAnswer "p"
	setcycle 30 condition "2"
	setcycle 30 rImage "FH1.JPG"
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	setcycle 60 target "food"
	setcycle 60 itemPosition "61"
	setcycle 60 lImage "FN1.JPG"
	setcycle 60 correctAnswer "q"
	setcycle 60 condition "3"
	setcycle 60 rImage "OB2.JPG"
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	setcycle 90 target "food"
	setcycle 90 itemPosition "91"
	setcycle 90 lImage "OB32.JPG"
	setcycle 90 correctAnswer "p"
	setcycle 90 condition "4"
	setcycle 90 rImage "FN1.JPG"
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	run trial_sequence

define loop food_target_practice_trial_loop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "trial_sequence"
	set description "A single block of trials"
	set cycles 5
	set column_order "itemPosition;target;correctAnswer;lImage;rImage;condition"
	set break_if "never"
	setcycle 0 target "food"
	setcycle 0 itemPosition "1"
	setcycle 0 lImage "FH1.JPG"
	setcycle 0 correctAnswer "q"
	setcycle 0 condition "1"
	setcycle 0 rImage "OB32.JPG"
	setcycle 1 target "food"
	setcycle 1 itemPosition "2"
	setcycle 1 lImage "FN12.JPG"
	setcycle 1 correctAnswer "q"
	setcycle 1 condition "1"
	setcycle 1 rImage "OB33.JPG"
	setcycle 2 target "food"
	setcycle 2 itemPosition "3"
	setcycle 2 lImage "OB34.JPG"
	setcycle 2 correctAnswer "p"
	setcycle 2 condition "1"
	setcycle 2 rImage "FH3.JPG"
	setcycle 3 target "food"
	setcycle 3 itemPosition "4"
	setcycle 3 lImage "OB4.JPG"
	setcycle 3 correctAnswer "p"
	setcycle 3 condition "1"
	setcycle 3 rImage "FN14.JPG"
	setcycle 4 target "food"
	setcycle 4 itemPosition "5"
	setcycle 4 lImage "OB35.JPG"
	setcycle 4 correctAnswer "p"
	setcycle 4 condition "1"
	setcycle 4 rImage "FH5.JPG"
	run trial_sequence

define inline_script initialisation
	set description "Executes Python code"
	___run__
	__end__
	___prepare__
	
	#create custom trial variable
	var.valid_trial_count = 0
	
	#globalise custom trial variable
	#global valid_trial_count
	__end__

define keyboard_response keyboard_response
	set timeout 2000
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "[correctAnswer]"
	set allowed_responses "q;p;Q;P"

define logger logger
	set description "Logs experimental data"
	set auto_log "no"
	log correct
	log response_time
	log lImage
	log rImage
	log condition
	log response
	log valid_trial_count
	log itemPosition

define sequence main_experimental_sequence
	set flush_keyboard "yes"
	set description "The main sequence of the experiment"
	run initialisation always
	run about_this_experiment always
	run eye_tracker_instructions always
	run continue always
	run pygaze_init always
	run food_target_first_condition "[subject_parity] = even"
	run object_target_first_condition "[subject_parity] = odd"
	run end_of_experiment_instructions always

define loop main_trials_food
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "food_target_main_block"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order "practice"
	set break_if "never"
	setcycle 0 practice "false"
	run food_target_main_block

define loop main_trials_object
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "object_target_main_block"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order "practice;target"
	set break_if "never"
	setcycle 0 practice "false"
	setcycle 0 target "non-food"
	run object_target_main_block

define sketchpad object_next_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Thank you!" x=0 y=-288 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You have completed the first part of the experiment.<br /><br />In the second part of the experiment, the task is the same, however:<br />you must now identify which side the <b>NON-FOOD</b> image is on.<br /><br />Again, please press the <b>Q</b> key if it is on the left, or<br />press the <b>P</b> key if it is on the right.<br /><br />You will not have any practice trials for this part.<br /><br />Please have a rest now if you need one.<br /><br />When you are ready to begin, place your hands on the <b>Q</b> and <b>P</b> keys<br />and press the <b>space</b> bar." x=0 y=0 z_index=0

define sequence object_target_first_block
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run experimental_instructions_object_first always
	run continue always
	run practice_trials_object always
	run end_of_practice always
	run continue always
	run main_trials_object always
	run food_next_instructions always
	run continue always
	run main_trials_food always

define loop object_target_first_condition
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "object_target_first_block"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run object_target_first_block

define sequence object_target_main_block
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run object_target_main_trial_loop always

define loop object_target_main_trial_loop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "trial_sequence"
	set description "A single block of trials"
	set cycles 120
	set column_order "itemPosition;target;correctAnswer;lImage;rImage;condition"
	set break_if "never"
	setcycle 0 target "non-food"
	setcycle 0 itemPosition "121"
	setcycle 0 lImage "OB60.JPG"
	setcycle 0 correctAnswer "q"
	setcycle 0 condition "5"
	setcycle 0 rImage "FH1.JPG"
	setcycle 1 target "non-food"
	setcycle 1 itemPosition "122"
	setcycle 1 lImage "OB59.JPG"
	setcycle 1 correctAnswer "q"
	setcycle 1 condition "5"
	setcycle 1 rImage "FH2.JPG"
	setcycle 2 target "non-food"
	setcycle 2 itemPosition "123"
	setcycle 2 lImage "OB58.JPG"
	setcycle 2 correctAnswer "q"
	setcycle 2 condition "5"
	setcycle 2 rImage "FH3.JPG"
	setcycle 3 target "non-food"
	setcycle 3 itemPosition "124"
	setcycle 3 lImage "OB57.JPG"
	setcycle 3 correctAnswer "q"
	setcycle 3 condition "5"
	setcycle 3 rImage "FH4.JPG"
	setcycle 4 target "non-food"
	setcycle 4 itemPosition "125"
	setcycle 4 lImage "OB56.JPG"
	setcycle 4 correctAnswer "q"
	setcycle 4 condition "5"
	setcycle 4 rImage "FH5.JPG"
	setcycle 5 target "non-food"
	setcycle 5 itemPosition "126"
	setcycle 5 lImage "OB55.JPG"
	setcycle 5 correctAnswer "q"
	setcycle 5 condition "5"
	setcycle 5 rImage "FH6.JPG"
	setcycle 6 target "non-food"
	setcycle 6 itemPosition "127"
	setcycle 6 lImage "OB54.JPG"
	setcycle 6 correctAnswer "q"
	setcycle 6 condition "5"
	setcycle 6 rImage "FH7.JPG"
	setcycle 7 target "non-food"
	setcycle 7 itemPosition "128"
	setcycle 7 lImage "OB53.JPG"
	setcycle 7 correctAnswer "q"
	setcycle 7 condition "5"
	setcycle 7 rImage "FH8.JPG"
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	setcycle 30 target "non-food"
	setcycle 30 itemPosition "151"
	setcycle 30 lImage "FH1.JPG"
	setcycle 30 correctAnswer "p"
	setcycle 30 condition "6"
	setcycle 30 rImage "OB30.JPG"
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	setcycle 60 target "non-food"
	setcycle 60 itemPosition "181"
	setcycle 60 lImage "OB60.JPG"
	setcycle 60 correctAnswer "q"
	setcycle 60 condition "7"
	setcycle 60 rImage "FN1.JPG"
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	setcycle 90 target "non-food"
	setcycle 90 itemPosition "211"
	setcycle 90 lImage "FN1.JPG"
	setcycle 90 correctAnswer "p"
	setcycle 90 condition "8"
	setcycle 90 rImage "OB30.JPG"
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	run trial_sequence

define loop object_target_practice_trial_loop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "trial_sequence"
	set description "A single block of trials"
	set cycles 5
	set column_order "itemPosition;target;correctAnswer;lImage;rImage;condition"
	set break_if "never"
	setcycle 0 target "food"
	setcycle 0 itemPosition "1"
	setcycle 0 lImage "FH1.JPG"
	setcycle 0 correctAnswer "p"
	setcycle 0 condition "1"
	setcycle 0 rImage "OB32.JPG"
	setcycle 1 target "food"
	setcycle 1 itemPosition "2"
	setcycle 1 lImage "FN12.JPG"
	setcycle 1 correctAnswer "p"
	setcycle 1 condition "1"
	setcycle 1 rImage "OB33.JPG"
	setcycle 2 target "food"
	setcycle 2 itemPosition "3"
	setcycle 2 lImage "OB34.JPG"
	setcycle 2 correctAnswer "q"
	setcycle 2 condition "1"
	setcycle 2 rImage "FH3.JPG"
	setcycle 3 target "food"
	setcycle 3 itemPosition "4"
	setcycle 3 lImage "OB4.JPG"
	setcycle 3 correctAnswer "q"
	setcycle 3 condition "1"
	setcycle 3 rImage "FN14.JPG"
	setcycle 4 target "food"
	setcycle 4 itemPosition "5"
	setcycle 4 lImage "OB35.JPG"
	setcycle 4 correctAnswer "q"
	setcycle 4 condition "1"
	setcycle 4 rImage "FH5.JPG"
	run trial_sequence

define sequence practice_block_food_first
	set flush_keyboard "yes"
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run food_target_practice_trial_loop always

define sequence practice_block_object_first
	set flush_keyboard "yes"
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run object_target_practice_trial_loop always

define loop practice_trials_food
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "practice_block_food_first"
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set column_order "practice"
	set break_if "never"
	setcycle 0 practice "true"
	run practice_block_food_first

define loop practice_trials_object
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "practice_block_object_first"
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set column_order "practice"
	set break_if "never"
	setcycle 0 practice "true"
	run practice_block_object_first

define pygaze_init pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode "area"
	set eyelink_force_drift_correct "yes"
	set description "Initialize and calibrate eye tracker"
	set calibrate "yes"
	set calbeep "yes"
	set _logfile "automatic"

define pygaze_log pygaze_log
	set throttle 2
	__msg__
	###expVars
	condition 	lImage	rImage	itemPosition	participantID	Accuracy	response time
	[condition]	[lImage]	[rImage]	[itemPosition]	[subject_nr]	correct	response_time
	__end__
	set description "Writes information to the eye-tracker logfile"
	set auto_log "no"

define pygaze_start_recording pygaze_start_recording
	set status_msg "start_trial [count_trial_sequence]"
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg "stop_trial"
	set description "Stops recording of eye tracking data"

define sketchpad stimuli
	set start_response_interval "no"
	set penwidth 3
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="[lImage]" scale=1 show_if=always x=-660 y=0 z_index=0
	draw image center=1 file="[rImage]" scale=1 show_if=always x=660 y=0 z_index=0
	draw fixdot color="#000000" show_if=always style="large-cross" x=0 y=0 z_index=0

define inline_script trial_counter
	set description "Executes Python code"
	set _run ""
	___prepare__
	
	# remove the instances of trials from the trial count
	
	var.valid_trial_count += 1
	
	
	if var.practice == "true":
		var.valid_trial_count -= 1
		
	
	print ("trial_count is %i; valid_trial_count is %i" %(var.count_trial_sequence,var.valid_trial_count))
	__end__

define sequence trial_sequence
	set flush_keyboard "yes"
	set description "A single trial"
	run trial_counter always
	run pygaze_log "[practice] = false"
	run pygaze_start_recording "[practice] = false"
	run fixation_cross always
	run stimuli always
	run keyboard_response always
	run logger "[practice] = false"
	run pygaze_stop_recording "[practice] = false"

